# Generated by Configurator on Wed Nov 05 10:26:09 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Focus,TIPFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

